PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Ethnicity': '', 'Gender': '', 'Age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1680, 1050]
  expName = emotionRecognition
  keyboardBackend = ioHub
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Routines
  Routine baseline
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    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie = baselineVideo.mkv
      size = (1920,1080)
      startVal [time (s)] = 0.0
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    UnknownPluginComponent cortex_rec plugin="psychopy-emotiv"
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
  Routine countDown
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    TextComponent Three
      letterHeight = 180
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Two
      letterHeight = 180
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent One
      letterHeight = 180
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine chooseCategoriesTrial
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    TextComponent instructions
      letterHeight = 40
      pos = (0,win.size[1]/2.5)
      startVal [time (s)] = 0.0
      text = $"Please select your prefered category from the choices below"
      wrapWidth = (win.size[0]/1.5)
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    TextComponent option1Text
      letterHeight = 40.0
      pos = ((-win.size[0]/3), -300)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
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    ImageComponent option1Image
      image [set every repeat] = $image1
      pos = ((-win.size[0]/3), 0)
      size = (win.size[0]/5,None)
      startVal [time (s)] = 0.0
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    TextComponent option2Text
      letterHeight = 40.0
      pos = (0, -300)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text2
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    ImageComponent option2Image
      image [set every repeat] = $image2
      pos = (0.0,0.0)
      size = (win.size[0]/5,None)
      startVal [time (s)] = 0.0
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    TextComponent option3Text
      letterHeight = 40.0
      pos = (win.size[0]/3, -300)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
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    ImageComponent option3Image
      image [set every repeat] = $image3
      pos = (win.size[0]/3, 0)
      size = (win.size[0]/5,None)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = option1Image, option1Text,option2Image, option2Text, option3Image, option3Text
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.2
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import subprocess

        def capture_webcam():
            # Command to capture webcam using ffmpeg on Windows
            ffmpeg_cmd = [
                'ffmpeg',
                '-f', 'dshow',                     # Input format (DirectShow)
                '-i', 'video=Logitech HD Webcam C510', # Specify the webcam device name here
                '-c:v', 'libxvid',                 # Video codec (Xvid)
                '-q:v', '5',                       # Video quality (lower is better quality, range 1-31)
                'new.avi'      # Output file
            ]

            # Start the subprocess
            ffmpeg_process = subprocess.Popen(ffmpeg_cmd)

            # Return the subprocess object
            return ffmpeg_process

        # Call the function to start capturing webcam
        ffmpeg_process = capture_webcam()

        trialsList = []
        neutralVideos = []
        selectionTrialsList = []
        experimentTrialsList = []
        categoryIndex = 0
        moviePath = None
        fileLocation = ''

        for video in os.listdir('neutral_videos'):
            videoPath = os.path.join('neutral_videos',video)
            neutralVideos.append(videoPath)

        for category in os.listdir('videos'):

            thisSelectionTrialDict = {
            'mainIndex': categoryIndex, 'emotion':category,
            'image1': None, 'text1': '', 'stimuli1': None,
            'image2': None, 'text2': '', 'stimuli2': None,
            'image3': None, 'text3': '', 'stimuli3': None
            }

            fullpath = os.path.join('videos',category)
            emotion=category.split()[1]
            categoryName = category.split()[1]
            thisTrialDict = {
            'mainIndex':categoryIndex,
            'stim': '',
            'emotion': categoryName,
            'neutralvideo': neutralVideos[categoryIndex]
            }

            if (len(os.listdir('videos/'+category)))==1:
                fileLocation = ''
                for file in os.listdir('videos/'+category):
                    filename, extension = os.path.splitext(file)
                    fileLocation = os.path.join(fullpath,file)
                    if extension == '.mp4':
                        moviePath = os.path.join(fullpath,item)
                        print('    movie path',fileLocation,end='')
                        thisTrialDict['stim']=fileLocation

                    if extension == '.mkv':
                        moviePath = os.path.join(fullpath,item)
                        print('    movie path',fileLocation,end='')
                        thisTrialDict['stim']=fileLocation

            if (len(os.listdir('videos/'+category)))>1:
                stim = 1

                for subcategory in os.listdir('videos/'+category):
                    fullpath =os.path.join('videos',category,subcategory)
                    thisSelectionTrialDict['text'+str(stim)]=subcategory.split()[1]

                    for item in os.listdir(fullpath):
                        filename, extension = os.path.splitext(item)

                        if extension == '.mp4':
                            moviePath = os.path.join(fullpath,item)
                            thisSelectionTrialDict['stimuli'+str(stim)]=moviePath

                        if extension == '.mkv':
                            moviePath = os.path.join(fullpath,item)
                            thisSelectionTrialDict['stimuli'+str(stim)]=moviePath

                        elif extension == '.jpg':
                            imagePath = os.path.join(fullpath,item)
                            thisSelectionTrialDict['image'+str(stim)]=imagePath

                    stim+=1

                selectionTrialsList.append(thisSelectionTrialDict)

            categoryIndex +=1
            experimentTrialsList.append(thisTrialDict)
        print('selectionTrialsList',selectionTrialsList)
      End Experiment:
        if ffmpeg_process.poll() is None:
            print("Terminating ffmpeg subprocess...")
            ffmpeg_process.terminate()
            ffmpeg_process.wait()  # Wait for the subprocess to finish
      End Routine:
        if mouse.clicked_name == ['option1Image'] or mouse.clicked_name == ['option1Text']: #TODO: come here and add all options
            print('Clicked 1 dummy')
            experimentTrialsList[mainIndex]['stim']= stimuli1

        elif mouse.clicked_name == ['option2Image'] or mouse.clicked_name == ['option2Text']: #TODO: come here and add all options
            print('Clicked 2 dummy')
            experimentTrialsList[mainIndex]['stim']= stimuli2

        elif mouse.clicked_name == ['option3Image'] or mouse.clicked_name == ['option3Text']: #TODO: come here and add all options
            print('Clicked 3 dummy')
            experimentTrialsList[mainIndex]['stim']= stimuli3
        print('stim video file',experimentTrialsList[mainIndex]['stim'])
  Routine playClip
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    MovieComponent stimclip
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $stim
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        try:
            window_width, window_height = win.size
            print('stim clip size:', stimclip.size)
            print('stim clip original size:', stimclip.frameSize)

            # Get the original size of the video
            orig_width, orig_height = stimclip.frameSize

            # Calculate the scaling factors for width and height
            scale_width = window_width / orig_width
            scale_height = window_height / orig_height

            # Use the smaller scaling factor to maintain aspect ratio
            scale_factor = min(scale_width, scale_height)

            # Scale the size of the stimclip proportionally
            new_width = int(orig_width * scale_factor)
            new_height = int(orig_height * scale_factor)

            # Set the size of the stimclip to maintain aspect ratio
            stimclip.size = (new_width, new_height)
        except Exception as e:
            print('Exception:', e)
            # Handle the exception if necessary
            # stimclip.size=1000,1000#stimclip.size=stimclip.origSize()
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    EmotivMarkingComponent eeg_marker_play_clip plugin="psychopy-emotiv"
      durationEstim = 0.01
      emotiv_marker_label [set every repeat] = $stim
      emotiv_marker_value = 1
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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  Routine positiveNegative
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        # Code inserted in positivenegative, before experiment section
      Begin Experiment:
        # Code inserted in positivenegative, begin experiment section
      Each Frame:
        # Code inserted in positivenegative, each frame section
      End Experiment:
        # Code inserted in positivenegative, end experiment section
        print('Here in end experiment for attractiveness')
    SliderComponent agree
      forceEndRoutine = True
      granularity = 1
      labels = ('Strongly Disagree','disagree','Neutral','Agree','Strongly Agree')
      letterHeight = 25.0
      pos = (0, -100)
      size = (win.size[0]-250,50)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text
      letterHeight = 60.0
      pos = (0, 300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'I feel '+ emotion
      wrapWidth = (win.size[0]-200)
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    EmotivMarkingComponent eeg_marker_rating plugin="psychopy-emotiv"
      durationEstim = 0.01
      emotiv_marker_label = rating
      emotiv_marker_value = 1
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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  Routine countDown_2
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  Routine neutralVideo
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    MovieComponent neutralVideoClip
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $neutralvideo
      saveStartStop = False
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = .2
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        try:
            window_width, window_height = win.size
            print('stim clip size:', neutralVideoClip.size)
            print('stim clip original size:', neutralVideoClip.frameSize)

            # Get the original size of the video
            orig_width, orig_height = neutralVideoClip.frameSize

            # Calculate the scaling factors for width and height
            scale_width = window_width / orig_width
            scale_height = window_height / orig_height

            # Use the smaller scaling factor to maintain aspect ratio
            scale_factor = min(scale_width, scale_height)

            # Scale the size of the neutralVideoClip proportionally
            new_width = int(orig_width * scale_factor)
            new_height = int(orig_height * scale_factor)

            # Set the size of the neutralVideoClip to maintain aspect ratio
            neutralVideoClip.size = (new_width, new_height)
        except Exception as e:
            print('Exception:', e)
            # Handle the exception if necessary
            # neutralVideoClip.size=1000,1000#neutralVideoClip.size=neuneutralVideoClip.origSize()
    EmotivMarkingComponent eeg_marker_neutral_video plugin="psychopy-emotiv"
      durationEstim = 0.01
      emotiv_marker_label = neutral_video
      emotiv_marker_value = 1
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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  Routine clicktoContinue
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    TextComponent text_click_to_continue
      letterHeight = 60
      startVal [time (s)] = 0
      text = Click anywhere to continue
      wrapWidth = 1500
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    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine startCamera
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    CameraComponent cam
      cameraLib = opencv
      device = default
      deviceManual = 0
      frameRateManual = 30.00003000003
      mic = default
      micChannels = mono
      micMaxRecSize = 24000
      micSampleRate = Voice (16kHz)
      resolutionManual = (1920,1080)
      saveFile = True
      startVal [time (s)] = 0
      syncScreenRefresh = False
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Flow
  LoopInitiator chooseCategoriesLoop loopType="TrialHandler"
    conditionsFile = selectionTrialsList.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image1': 'None', 'text1': 'test', 'stimuli1': None, 'image2': 'default.png', 'text2': 'set every repeat', 'stimuli2': None, 'image3': 'default.png', 'text3': 'set every repeat', 'stimuli3': None},
      {'image1': 'default.png', 'text1': 'set every repeat', 'stimuli1': None, 'image2': 'default.png', 'text2': 'set every repeat', 'stimuli2': None, 'image3': 'None', 'text3': 'None', 'stimuli3': None},
      {'image1': 'default.png', 'text1': 'set every repeat', 'stimuli1': None, 'image2': 'None', 'text2': 'None', 'stimuli2': None, 'image3': 'None', 'text3': 'None', 'stimuli3': None},
      {'image1': 'default.png', 'text1': 'set every repeat', 'stimuli1': None, 'image2': 'None', 'text2': 'None', 'stimuli2': None, 'image3': 'None', 'text3': 'None', 'stimuli3': None}]
    Routine chooseCategoriesTrial
  LoopTerminator chooseCategoriesLoop
  Routine baseline
  Routine clicktoContinue
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experimentTrialsList.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stim': 'videos\\1 excited\\1 Motorsports\\kenMiles.mp4', 'emotion': 'excited', 'neutral_videos': 'videos\\2 happy\\scooby.mp4'},
      {'stim': 'videos\\2 happy\\scooby.mp4', 'emotion': 'happy', 'neutral_videos': 'videos\\1 excited\\1 Motorsports\\kenMiles.mp4'}]
    Routine countDown
    Routine playClip
    Routine positiveNegative
    Routine countDown
    Routine neutralVideo
  LoopTerminator trials
